PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = choiceText
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Routines
  Routine trial
    TextComponent Instructions
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Please use the slider to indicate how much money you would spend on the following experiences.


        Press 'space' to begin!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ChoicePreferences
    TextComponent text
      color [set every repeat] = $[1.000,1.000,1.000]
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.08
      pos [set every repeat] = (0, 0.07)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choices
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    RatingScaleComponent rating
      categoryChoices = $0, $0.20, $0.40, $0.60, $0.80, $1.00
      forceEndRoutine = True
      high = 1.00
      low = 0
      pos = 0, -0.3
      size = 1.7
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating!


        Please press space to exit.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ChoiceText.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('choices', 'Taking a family member\n on a shopping trip')]),
      OrderedDict([('choices', 'Taking your friend \nto the spa')]),
      OrderedDict([('choices', 'Baking a cake for a \nfamily memberís birthday')]),
      OrderedDict([('choices', 'Making a friendís \nfavorite dinner')]),
      OrderedDict([('choices', 'Planning a surprise \nparty for a family member')]),
      OrderedDict([('choices', 'Buying flowers for \na significant other')]),
      OrderedDict([('choices', 'Taking your friend \non a cruise')]),
      OrderedDict([('choices', 'Talking over the phone\nwith a significant other')]),
      OrderedDict([('choices', 'Making cookies to \ngive to a friend')]),
      OrderedDict([('choices', 'Going to a coffee \nshop with friends')]),
      OrderedDict([('choices', 'Getting a slice of \npizza with a friend')]),
      OrderedDict([('choices', 'Getting tagged in \nInstagram pictures')]),
      OrderedDict([('choices', 'Talking to a friend \nover Skype')]),
      OrderedDict([('choices', 'Walking around Central \nPark with family')]),
      OrderedDict([('choices', 'Eating dinner at a\nrestaurant with friends ')]),
      OrderedDict([('choices', 'Having a Tweet go viral')]),
      OrderedDict([('choices', 'Playing volleyball\nwith friends')]),
      OrderedDict([('choices', 'Getting likes on an\nInstagram picture')]),
      OrderedDict([('choices', 'Going on a weekend\ngetaway with family')]),
      OrderedDict([('choices', 'Playing icebreakers\nwith classmates')]),
      OrderedDict([('choices', 'Going on a first date \nto the movies')]),
      OrderedDict([('choices', 'Going dancing with\na significant other')])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
    Routine ChoicePreferences
  LoopTerminator trials
  Routine end
